<PlusConfiguration version="2.1">
  <DataCollection StartupDelaySec="1.0">
    <DeviceSet 
      Name="PlusServer: LeapMotion Right Hand" 
      Description="Collecting joint pose data from a LeapMotion hand tracker and broadcasting through OpenIGTLink"
    />
    <Device 
      AcquisitionRate="1000"
      Id="TrackerDevice"
      Type="LeapMotion"
      LeapHMDPolicy="FALSE"
      ToolReferenceFrame="Tracker" >
      <DataSources>
        <DataSource Type="Video" Id="LeftCamera"/>
        <DataSource Type="Video" Id="RightCamera"/>
        <DataSource Type="Tool" Id="RightThumbProximal"/>
        <DataSource Type="Tool" Id="RightIndexProximal"/>
        <DataSource Type="Tool" Id="RightMiddleProximal"/>
        <DataSource Type="Tool" Id="RightRingProximal"/>
        <DataSource Type="Tool" Id="RightPinkyProximal"/>
        <DataSource Type="Tool" Id="RightPalm"/>
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="LeftChannel" VideoDataSourceId="LeftCamera"/>
        <OutputChannel Id="RightChannel" VideoDataSourceId="RightCamera"/>

        <OutputChannel Id="TrackerChannel">
          <DataSource Id="RightThumbDistal"/>
          <DataSource Id="RightIndexDistal"/>
          <DataSource Id="RightMiddleDistal"/>
          <DataSource Id="RightRingDistal"/>
          <DataSource Id="RightPinkyDistal"/>

          <DataSource Id="RightThumbIntermediate"/>
          <DataSource Id="RightIndexIntermediate"/>
          <DataSource Id="RightMiddleIntermediate"/>
          <DataSource Id="RightRingIntermediate"/>
          <DataSource Id="RightPinkyIntermediate"/>

          <DataSource Id="RightThumbProximal"/>
          <DataSource Id="RightIndexProximal"/>
          <DataSource Id="RightMiddleProximal"/>
          <DataSource Id="RightRingProximal"/>
          <DataSource Id="RightPinkyProximal"/>
          <DataSource Id="RightPalm"/>
        </OutputChannel>
      </OutputChannels>
    </Device>
    <Device
      Id="CaptureDevice"
      Type="VirtualCapture"
      BaseFilename="RecordingTest.igs.nrrd"
      EnableCompression="TRUE"
      EnableCapturingOnStart="FALSE" >
      <InputChannels>
        <InputChannel Id="TrackerChannel" />
      </InputChannels>
    </Device>
  </DataCollection>

  <CoordinateDefinitions>
    <Transform From="LeftCamera" To="Tracker"
      Matrix="1 0 0 0
              0 1 0 0
              0 0 1 0
              0 0 0 1"
      Date="2011.12.06 17:57:00" Error="0.0" />
  </CoordinateDefinitions> 

  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1" 
    MaxTimeSpentLeaphProcessingMs="50" 
    ListeningPort="18945" 
    OutputChannelId="LeftChannel"
    > 
    <DefaultClientInfo> 
      <MessageTypes> 
        <Message Type="IMAGE" />
      </MessageTypes>
      <ImageNames> 
        <Image Name="LeftCamera" EmbeddedTransformToFrame="Tracker"/>
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>

  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1" 
    MaxTimeSpentLeaphProcessingMs="50" 
    ListeningPort="18944" 
    OutputChannelId="TrackerChannel"
    > 
    <DefaultClientInfo> 
      <MessageTypes> 
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <Transform Name="RightThumbDistalToTracker"/>
        <Transform Name="RightIndexDistalToTracker"/>
        <Transform Name="RightMiddleDistalToTracker"/>
        <Transform Name="RightRingDistalToTracker"/>
        <Transform Name="RightPinkyDistalToTracker"/>

        <Transform Name="RightThumbIntermediateToTracker"/>
        <Transform Name="RightIndexIntermediateToTracker"/>
        <Transform Name="RightMiddleIntermediateToTracker"/>
        <Transform Name="RightRingIntermediateToTracker"/>
        <Transform Name="RightPinkyIntermediateToTracker"/>

        <Transform Name="RightThumbProximalToTracker"/>
        <Transform Name="RightIndexProximalToTracker"/>
        <Transform Name="RightMiddleProximalToTracker"/>
        <Transform Name="RightRingProximalToTracker"/>
        <Transform Name="RightPinkyProximalToTracker"/>
        <Transform Name="RightPalmToTracker"/>
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer> 
</PlusConfiguration>